<?xml version="1.0" encoding="UTF-8"?><batch>
    <batchstep method="io.github.mzmine.modules.io.rawdataimport.RawDataImportModule">
        <parameter name="Raw data file names">
            <file>/mnt/home/vascokar/metabolomics_cattle/mzXML/nonpolar_positive/QE_062822_133_BLANK.mzXML</file>
            <file>/mnt/home/vascokar/metabolomics_cattle/mzXML/nonpolar_positive/QE_062822_134_BLANK.mzXML</file>
            <file>/mnt/home/vascokar/metabolomics_cattle/mzXML/nonpolar_positive/QE_062822_135_POOL.mzXML</file>
            <file>/mnt/home/vascokar/metabolomics_cattle/mzXML/nonpolar_positive/QE_062822_136_MA001_1.mzXML</file>
            <file>/mnt/home/vascokar/metabolomics_cattle/mzXML/nonpolar_positive/QE_062822_137_MA001_2.mzXML</file>
            <file>/mnt/home/vascokar/metabolomics_cattle/mzXML/nonpolar_positive/QE_062822_138_MA001_7.mzXML</file>
            <file>/mnt/home/vascokar/metabolomics_cattle/mzXML/nonpolar_positive/QE_062822_139_MA002_1.mzXML</file>
            <file>/mnt/home/vascokar/metabolomics_cattle/mzXML/nonpolar_positive/QE_062822_140_MA002_2.mzXML</file>
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <spectrum_type>CENTROIDED</spectrum_type>
            <ms_level>1</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Mass detector" selected="Centroid">
            <module name="Centroid">
                <parameter name="Noise level">40000.0</parameter>
            </module>
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        </parameter>
        <parameter name="Mass list name">masses</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <spectrum_type>CENTROIDED</spectrum_type>
            <ms_level>2</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Mass detector" selected="Centroid">
            <module name="Centroid">
                <parameter name="Noise level">3500.0</parameter>
            </module>
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        </parameter>
        <parameter name="Mass list name">masses</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_ADAPchromatogrambuilder.ADAPChromatogramBuilderModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <retention_time>
                <min>1.0</min>
                <max>10.0</max>
            </retention_time>
            <spectrum_type>CENTROIDED</spectrum_type>
            <ms_level>1</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Mass list">masses</parameter>
        <parameter name="Min group size in # of scans">4</parameter>
        <parameter name="Group intensity threshold">40000.0</parameter>
        <parameter name="Min highest intensity">50000.0</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">chroms</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_smoothing.SmoothingModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Filename suffix">sm</parameter>
        <parameter name="Filter width">5</parameter>
        <parameter name="Remove original feature list">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.DeconvolutionModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Suffix">r</parameter>
        <parameter name="Algorithm" selected="Local minimum search">
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            <module name="Local minimum search">
                <parameter name="Chromatographic threshold">0.8339999999</parameter>
                <parameter name="Search minimum in RT range (min)">0.05</parameter>
                <parameter name="Minimum relative height">0.0</parameter>
                <parameter name="Minimum absolute height">50000.0</parameter>
                <parameter name="Min ratio of peak top/edge">1.8</parameter>
                <parameter name="Peak duration range (min)">
                    <min>0.0</min>
                    <max>1.51</max>
                </parameter>
            </module>
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        </parameter>
        <parameter measure="MEDIAN" name="m/z center calculation" weighting="NONE">CenterFunction</parameter>
        <parameter name="m/z range for MS2 scan pairing (Da)" selected="true">0.002</parameter>
        <parameter name="RT range for MS2 scan pairing (min)" selected="true">0.15</parameter>
        <parameter name="Remove original feature list">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_deisotoper.IsotopeGrouperModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">deiso</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>3.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" type="absolute">0.05</parameter>
        <parameter name="Monotonic shape">true</parameter>
        <parameter name="Maximum charge">2</parameter>
        <parameter name="Representative isotope">Most intense</parameter>
        <parameter name="Remove original peaklist">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.align_join.JoinAlignerModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Feature list name">Aligned feature list</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Weight for m/z">3.0</parameter>
        <parameter name="Retention time tolerance" type="absolute">0.1</parameter>
        <parameter name="Weight for RT">1.0</parameter>
        <parameter name="Require same charge state">false</parameter>
        <parameter name="Require same ID">false</parameter>
        <parameter name="Compare isotope pattern" selected="false">
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        </parameter>
        <parameter name="Compare spectra similarity" selected="false">
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.gapfill_peakfinder.multithreaded.MultiThreadPeakFinderModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">gaps</parameter>
        <parameter name="Intensity tolerance">0.2</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" type="absolute">0.05</parameter>
        <parameter name="Remove original feature list">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_duplicatefilter.DuplicateFilterModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">dup</parameter>
        <parameter name="Filter mode">NEW AVERAGE</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>8.0E-4</absolutetolerance>
            <ppmtolerance>1.5</ppmtolerance>
        </parameter>
        <parameter name="RT tolerance" type="absolute">0.035</parameter>
        <parameter name="Require same identification">false</parameter>
        <parameter name="Remove original peaklist">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">filtered-3</parameter>
        <parameter name="Minimum peaks in a row" selected="true">3.0</parameter>
        <parameter name="Minimum peaks in an isotope pattern" selected="false"/>
        <parameter name="m/z" selected="false"/>
        <parameter name="Retention time" selected="false"/>
        <parameter name="Peak duration range" selected="false">
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        </parameter>
        <parameter name="Chromatographic FWHM" selected="false">
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        </parameter>
        <parameter name="Charge" selected="false"/>
        <parameter name="Kendrick mass defect" selected="false">
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        </parameter>
        <parameter name="Parameter">No parameters defined</parameter>
        <parameter name="Only identified?">false</parameter>
        <parameter name="Text in identity" selected="false"/>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="Keep or remove rows">Keep rows that match all criteria</parameter>
        <parameter name="Keep only peaks with MS2 scan (GNPS)">true</parameter>
        <parameter name="Reset the peak number ID">true</parameter>
        <parameter name="Remove source feature list after filtering">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.gnpsexport.fbmn.GnpsFbmnExportAndSubmitModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Filename">
            <current_file>/mnt/home/vascokar/metabolomics_cattle/GNPS/GNPS_nonpolar_mastitis.mgf</current_file>
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        </parameter>
        <parameter name="Mass list">masses</parameter>
        <parameter name="Merge MS/MS (experimental)" selected="false">
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        </parameter>
        <parameter name="Filter rows">ONLY WITH MS2</parameter>
        <parameter name="Submit to GNPS" selected="false">
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        </parameter>
        <parameter name="Open folder">false</parameter>
    </batchstep>
</batch>
